PsychoPy2experiment version="2026.1.0"
Settings
  expName = reaction_time
  Full-screen window = False
  Window size (pixels) = [1024, 768]
Routines
  Routine welcome
    RoutineSettingsComponent welcome
    TextComponent instructions
      letterHeight = 0.08
      startVal [] = 0
      stopVal [duration (s)] = 100
      startEstim = 0
      durationEstim = 100
      text:
        How fast are you?

        A green GO! will appear in the middle of the screen.
        Press the SPACE key as soon as you see it.

        You will do it 8 times.
        Your average reaction time will be shown in the end.

        Press SPACE to begin.
    KeyboardComponent startKey
      allowedKeys = ['space']
      store = nothing
      startVal [] = 0
      stopVal [duration (s)] = 100
      forceEndRoutine = True
  Routine trial
    RoutineSettingsComponent trial
    TextComponent fixation
      text = +
      letterHeight = 0.2
      startVal [] = 0
      stopVal [duration (s)] = 0.5
    TextComponent stimulus
      text = GO!
      color = green
      letterHeight = 0.2
      startVal [time (s)] = 1 + random()
      stopVal [duration (s)] = 10
      startEstim = 1.5
      durationEstim = 10
    KeyboardComponent response
      allowedKeys = ['space']
      startVal [time (s)] = -1
      stopVal [duration (s)] = 10
      forceEndRoutine = True
      startEstim = 1.5
      durationEstim = 10
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    CodeComponent storeRT
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  Routine results
    RoutineSettingsComponent results
    CodeComponent calcResults
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    TextComponent resultsText
      text = Calculating your results...
      letterHeight = 0.08
      startVal [] = 0
      stopVal [duration (s)] = 100
    KeyboardComponent endKey
      allowedKeys = ['space']
      store = nothing
      startVal [] = 0
      stopVal [duration (s)] = 100
      forceEndRoutine = True
Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 8
    Routine trial
  LoopTerminator trials
  Routine results
